CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (directory doesnot containregexp "[\\\\\\\\/]\\\\.")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['DNA: DNA stained with DAPI', 'PH3: An antibody for phosphorylated histone H3 correlated with mitosis', 'cellbody: ']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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Fat
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:Fat
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
ReduceNoise:[module_num:6|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
    Select the input image:RescaleIntensity
    Name the output image:ReduceNoise
    Size:4
    Distance:2
    Cut-off distance:0.03

EnhanceOrSuppressFeatures:[module_num:7|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notes:[' ']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
    Select the input image:ReduceNoise
    Name the output image:enhancedfat
    Select the operation:Enhance
    Feature size:100
    Feature type:Neurites
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    Smoothing scale:2
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    Enhancement method:Tubeness
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    Rescale result image:Yes

Threshold:[module_num:8|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
    Select the input image:enhancedfat
    Name the output image:Threshold
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:80
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    Thresholding method:Otsu

EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:Threshold
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:10
    Feature type:Dark holes
    Range of hole sizes:5,250
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):20,70
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.5,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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    Size of adaptive window:120
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    Thresholding method:Otsu

OverlayObjects:[module_num:11|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enabled:False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
    Input:RescaleIntensity
    Name the output image:OverlayObjects
    Objects:IdentifyPrimaryObjects
    Opacity:0.5

SaveImages:[module_num:12|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:Fat
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:primary_object
    Saved file format:jpeg
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:Yes
    Base image folder:Default Input Folder|
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    Save with lossless compression?:Yes

MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:IdentifyPrimaryObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

FilterObjects:[module_num:14|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
    Select the objects to filter:IdentifyPrimaryObjects
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:Yes
    Maximum value:6000
    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:.95

OverlayObjects:[module_num:15|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
    Input:Fat
    Name the output image:OverlayObjects
    Objects:FilterObjects
    Opacity:0.5

SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:Fat
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:jpeg
    Output file location:Same folder as image|CellProfiler_Overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectSizeShape:[module_num:17|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
    Select object sets to measure:FilterObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|sg3_#2_R_crop
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Frame_Fat,Image|Group_Index,Image|Group_Number,Image|Threshold_OrigThreshold_IdentifyPrimaryObjects,Image|Threshold_OrigThreshold_Threshold,Image|Threshold_SumOfEntropies_Threshold,Image|Threshold_SumOfEntropies_IdentifyPrimaryObjects,Image|Threshold_GuideThreshold_IdentifyPrimaryObjects,Image|Threshold_GuideThreshold_Threshold,Image|Threshold_WeightedVariance_Threshold,Image|Threshold_WeightedVariance_IdentifyPrimaryObjects,Image|Threshold_FinalThreshold_Threshold,Image|Threshold_FinalThreshold_IdentifyPrimaryObjects,Image|ExecutionTime_17MeasureObjectSizeShape,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
    Representation of Nan/Inf:Null
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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