CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders. Upload DAPI and BODIPY stained images here, making sure the "Extension" matches the file type (i.e. "png" for .png files)']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it. ', '', 'Sort DAPI and BODIPY stained color images. DAPI stained images will be assigned the name "DNA" in subsequent modules. BODIPY stained images will be assigned the name "FITC" in subsequent modules. Then click "Update" option below to sort the images.']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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:LIPID
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Convert DAPI stained images to grayscale images.']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enabled:False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
    Select the input image:DNA
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:No
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    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
ColorToGray:[module_num:6|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notes:['Convert FITC stained images to grayscale images.']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
    Select the input image:LIPID
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:No
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Identify nuclei from DAPI stained image that is now the grayscale "OrigBlue" image. Can change the parameters below using advanced settings. We found that the nuclei were between 8 and 80 pixels in our sample images and that a threshold correction factor of 1.3 led to the most accurate identification of nuclei. ']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enabled:False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
    Select the input image:OrigBlue
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.30,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Identify lipid droplets from FITC stained image that is now the grayscale "OrigGreen" image. Can change the parameters below using advanced settings. We found that the lipid droplets were between 6 and 200 pixels in our sample images and that a threshold correction factor of 1.1 led to the most accurate identification of lipid droplets.']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
    Select the input image:OrigGreen
    Name the primary objects to be identified:Lipid_droplets
    Typical diameter of objects, in pixel units (Min,Max):7,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:9|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notes:['Measure pixel intensity of lipid droplets that were identified in the previous "IdentifyPrimaryObjects" module.']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
    Select images to measure:OrigGreen
    Select objects to measure:Lipid_droplets

FilterObjects:[module_num:10|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notes:['Filter lipid droplets by intensity to exclude lipid droplets that were identified with a low intensity signal.']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
    Select the objects to filter:Lipid_droplets
    Name the output objects:True_lipid_droplets
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_OrigGreen
    Filter using a minimum measurement value?:Yes
    Minimum value:0
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

MeasureObjectSizeShape:[module_num:11|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notes:['Measure lipid droplets']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
    Select object sets to measure:True_lipid_droplets
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

SplitOrMergeObjects:[module_num:12|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notes:['Merge touching lipid droplets to identify adipocytes']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
    Select the input objects:True_lipid_droplets
    Name the new objects:Adipocyte
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
ConvertObjectsToImage:[module_num:13|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notes:['Convert objects to image']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
    Select the input objects:Adipocyte
    Name the output image:CellImage
    Select the color format:Binary (black & white)
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
IdentifyPrimaryObjects:[module_num:14|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notes:['Identify true adipocytes by IdentifyPrimaryObjects module and declumping of touching adipocytes']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
    Select the input image:CellImage
    Name the primary objects to be identified:Identified_adipocyte
    Typical diameter of objects, in pixel units (Min,Max):20,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.1,1
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    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:15|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notes:['Measure identified adipocytes']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
    Select object sets to measure:Identified_adipocyte
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:16|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notes:['Filter identified adipocytes by size']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
    Select the objects to filter:Identified_adipocyte
    Name the output objects:True_adipocyte
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:400
    Filter using a maximum measurement value?:Yes
    Maximum value:1000000

OverlayObjects:[module_num:17|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notes:['Overlay true adipocytes with nuclei seen on DAPI stained image']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enabled:False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
    Input:OrigBlue
    Name the output image:OverlayObjects
    Objects:Identified_adipocyte
    Opacity:0.5

MeasureObjectSizeShape:[module_num:18|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
    Select object sets to measure:True_adipocyte
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

SaveImages:[module_num:19|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:LIPID
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:merged
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Downloads
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Downloads
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:True_lipid_droplets|AreaShape_Area,True_lipid_droplets|Number_Object_Number,Image|Count_Adipocyte,Image|Count_True_lipid_droplets,Image|Count_True_adipocyte,Image|Count_Identified_adipocyte,Image|Count_Lipid_droplets,Image|FileName_LIPID,True_adipocyte|Number_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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